CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})_[0-9]{2}_(?P<ChannelNumber>[0-9])_(?P<ImageNumber>[0-9])_[A-Za-z\s_]+_[0-9]{3}(\.tif)?$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DAPI': 'Well', 'GFP': 'Well', 'PI': 'Well'}, {'DAPI': 'ImageNumber', 'GFP': 'ImageNumber', 'PI': 'ImageNumber'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:PI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:320
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:GFP
    Name the output image:IllumGFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:320
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:PI
    Name the output image:IllumPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:320
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:IllumDAPI
    Select method for constructing file names:Single name
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    Enter single file name:illumDAPI_HEP_P1
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    Saved file format:npy
    Output file location:Default Output Folder|Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:IllumGFP
    Select method for constructing file names:Single name
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    Enter single file name:illumGFP_Hep_P1
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumPI
    Select method for constructing file names:Single name
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    Enter single file name:illumPI_Hep_P1
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
