CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-P][0-9]{1,2})_[0-9]{2}_(?P<ChannelNumber>[0-9])_(?P<ImageNumber>[0-9])_[A-Za-z\s_]+_[0-9]{3}(\.tif)?$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:3
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:PI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/jen-hung/Desktop/CellProfiler/illumDAPI.npy   
    Name to assign this image:illumDAPI
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    Select the image type:Illumination function
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    Single image location:file:/Users/jen-hung/Desktop/CellProfiler/illumGFP.npy   
    Name to assign this image:illumGFP
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    Select the image type:Illumination function
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    Single image location:file:/Users/jen-hung/Desktop/CellProfiler/illumPI.npy   
    Name to assign this image:illumPI
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    Select the image type:Illumination function
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationApply:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_corrected
    Select the illumination function:illumDAPI
    Select how the illumination function is applied:Divide
    Select the input image:GFP
    Name the output image:GFP_corrected
    Select the illumination function:illumGFP
    Select how the illumination function is applied:Divide
    Select the input image:PI
    Name the output image:PI_corrected
    Select the illumination function:illumPI
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI_corrected
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:compartment
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP_corrected
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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